PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/sub-%s' % expInfo['participant_id']
  Experiment info = {'participant_id': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  expName = change_detection
  logging level = debug
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Routines
  Routine welcome
    TextComponent welcome_txt
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to this “change detection” experiment!
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  Routine instruction
    TextComponent instruction_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a string of random letters for 2 seconds, followed by a blank screen for 1.5 seconds. Then, another string of letters appears.

        You have to indicate whether the second string is the same (press LEFT) as or different (press RIGHT) from the first string.

        (Press enter to start.)
    KeyboardComponent instruction_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine init_fix
    TextComponent init_fix_target
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial
    TextComponent first_string
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $first
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    TextComponent encoding_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text = +
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    TextComponent second_string
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $second
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    TextComponent isi_fix
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.5
      text = +
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    KeyboardComponent trial_resp
      allowedKeys = 'left', 'right'
      correctAns = $correct_resp
      forceEndRoutine = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        feedback_txt_var = None

        import pandas as pd
        import ssl
        ssl._create_default_https_context = ssl._create_unverified_context

        url = "https://raw.githubusercontent.com/lukassnoek/lukassnoek.github.io/master/downloads/cd_conditions.csv"
        cd_df = pd.read_csv(url)
        cd_df.to_csv('tmp.csv')
      End Experiment:
        import os
        os.remove('tmp.csv')
      End Routine:
        if trial_resp.keys is None:
            feedback_txt_var = 'Missed!'
            feedback_color = (1, 1, 1)
        elif correct_resp == trial_resp.keys:
            feedback_txt_var = "Correct!"
            feedback_color = (-1, 1, -1)
        else:
            feedback_txt_var = 'Wrong!'
            feedback_color = (1, -1, -1)
  Routine isi
  Routine feedback
    TextComponent feedback_txt
      color [set every repeat] = $feedback_color
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_txt_var
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    TextComponent feedback_isi
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text = +
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  Routine overview
    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        acc = 0
        import matplotlib.pyplot as plt
        plt.plot()
        plt.savefig('tmp.png', transparent=True)
        plt.close()
      Begin Routine:
        print(trial_loop.data['trial_resp.corr'])
        acc = trial_loop.data['trial_resp.corr'].mean()
        rts = trial_loop.data['trial_resp.rt']

        plt.plot(rts)
        plt.xlabel('Trial nr.')
        plt.ylabel('Reaction time (sec.)')
        plt.savefig('tmp.png')
        plt.close()
      End Routine:
        import os
        os.remove('tmp.png')
    TextComponent acc_txt
      letterHeight = 0.2
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $f'Accuracy: {acc}'
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    ImageComponent results
      image [set every repeat] = tmp.png
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      texture resolution = 512
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Flow
  Routine welcome
  Routine instruction
  Routine init_fix
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = tmp.csv
    loopType = random
    nReps = 1
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    Routine trial
    Routine feedback
  LoopTerminator trial_loop
  Routine overview
